---
API: 3
OpenSesame: 4.0.13
Platform: posix
---
set width 1024
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "/Users/nina/Desktop/PupilNeon/Opensesame/ai_experiment"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set background "#3d3846"

define loop block_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run trial_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block_loop True

define inline_script canvas
	set description "Executes Python code"
	set _run ""
	___prepare__
	# Create a form
	form = Form(
	    cols=[1,4,4,1], rows=[1,4,1],
	    margins=(0,0,0,0), spacing=25
	)
	
	
	# im = im.resize((TARGET_WIDTH, TARGET_HEIGHT))
	
	
	# Create widjets
	buttonFake = Button(text='fake')
	buttonReal = Button(text='real')
	
	                        
	tag1 = ImageWidget(path=pool['tag25_09_00000.png'], adjust=True, frame=False)
	                   
	tag2 = ImageWidget(path=pool['tag25_09_00001.png'], adjust=True, frame=False)
	                   
	tag3 = ImageWidget(path=pool['tag25_09_00002.png'], adjust=True, frame=False)
	                   
	tag4 = ImageWidget(path=pool['tag25_09_00003.png'], adjust=True, frame=False)  
	
	             
	
	# Add the widgets to the form. The position in the form is indicated as a
	# (column, row) tuple.
	
	form.set_widget(tag1, (0, 0))
	form.set_widget(tag2, (3, 0))
	form.set_widget(tag3, (0, 2))
	form.set_widget(tag4, (3, 2))
	form.set_widget(buttonFake, (1,2))
	form.set_widget(buttonReal, (2,2))
	__end__

define inline_script canvas_create
	set description "Executes Python code"
	set _run ""
	___prepare__
	my_canvas = Canvas()
	__end__

define inline_script data_loader
	set description "Executes Python code"
	set _run ""
	___prepare__
	from os import listdir
	from os.path import isfile, join
	import random
	
	path_fake = "/Users/nina/Desktop/PupilNeon/Opensesame/ai_experiment/fake"
	path_real = "/Users/nina/Desktop/PupilNeon/Opensesame/ai_experiment/real"
	fake_img = [f for f in listdir(path_fake) if isfile(join(path_fake, f))]
	
	full_paths_fake = [join(path_fake, img) for img in fake_img]
	for path in full_paths_fake:
	    pool.add(path)
	    
	real_img = [f for f in listdir(path_real) if isfile(join(path_real, f))]
	full_paths_real = [join(path_real, img) for img in real_img]
	for path in full_paths_real:
	    pool.add(path)
	
	
	
	images_list = fake_img + real_img
	random.shuffle(images_list)
	__end__

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instructions True
	run tracker_init True
	run experiment_loop True

define loop experiment_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run block_sequence

define inline_script init_tracker
	set description "Executes Python code"
	___run__
	# star recording 
	recording_id = device.recording_start()
	print(f"Started recording with id {recording_id}")
	__end__
	___prepare__
	from pupil_labs.realtime_api.simple import Device
	import time
	
	
	ip = "172.20.10.3"
	device = Device(address=ip, port=8080)
	__end__

define sketchpad instructions
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=True text="You will see an image . <br />If you think image is AI generated - press z<br />If you think image is real - press m <br /><br /><br />Press 'spacebar' to continue<br />" x=0 y=0 z_index=0

define inline_script key
	set description "Executes Python code"
	___run__
	import numpy as np
	from pupil_labs.realtime_api.simple import discover_one_device
	from pupil_labs.real_time_screen_gaze.gaze_mapper import GazeMapper
	import time
	from pupil_labs.realtime_api.simple import Device
	
	kb = keyboard(keylist=['z', 'm'], timeout=20)
	
	def marker_verts():
	    return { 0: [ (20, 20),  # Top left marker corner
	                  (140, 20),  # Top right
	                  (140, 140),  # Bottom right
	                  (20, 140),  # Bottom left
	                ],
	             1: [ (864, 20),  # Top left marker corner
	                  (984, 20),  # Top right
	                  (984, 140),  # Bottom right
	                  (20, 140),  # Bottom left
	                ],
	             2: [ (864, 608),  # Top left marker corner
	                  (984, 608),  # Top right
	                  (984, 728),  # Bottom right
	                  (864, 728),  # Bottom left
	                ],
	             3: [ (20, 608),  # Top left marker corner
	                  (140, 608),  # Top right
	                  (140, 728),  # Bottom right
	                  (20, 728),  # Bottom left
	                ], }
	
	
	def screen_size():
	    return (1024, 768)
	
	
	def start():
	        
	        ip = "172.20.10.3"
	        device = Device(address=ip, port=8080)
	
	        calibration = device.get_calibration()
	        print("calibration", calibration, "\n")               
	        gazeMapper = GazeMapper(calibration)
	
	        print(f'Connected to {device}. One moment...')
	        surface = updateSurface(gazeMapper)
	        print("surface", surface)
	        map_gaze_data(device, gazeMapper, surface)
	
	
	def updateSurface(gazeMapper):
	        if gazeMapper is None:
	            return
	        gazeMapper.clear_surfaces()
	        surface = gazeMapper.add_surface(marker_verts(), screen_size())
	        return surface
	
	
	def map_gaze_data(device, gazeMapper, surface):
	    frameAndGaze = device.receive_matched_scene_video_frame_and_gaze(timeout_seconds=1 / 15)
	    if frameAndGaze is None:
	        print("frameAndGaze is none")
	        return
	    else:
	        frame, gaze = frameAndGaze
	        result = gazeMapper.process_frame(frame, gaze)
	        for surface_gaze in result.mapped_gaze[surface.uid]:
	            print(f"Gaze at {surface_gaze.x}, {surface_gaze.y}")
	            
	            
	            
	while len(images_list)!=0:
	    image_name =  images_list.pop(0)
	    path = exp.pool[image_name]
	    my_canvas.image(path, center=True, scale = 0.8)
	    
	    path_april_1 = exp.pool['marker_0.png']
	    path_april_2 = exp.pool['marker_1.png']
	    path_april_3 = exp.pool['marker_2.png']
	    path_april_4 = exp.pool['marker_3.png']
	
	# Function interface
	
	    my_canvas.image(path_april_1, center= True, x=-420, y=-315 )
	    my_canvas.image(path_april_2, center= True, x=420, y=-315)
	    my_canvas.image(path_april_3, center= True, x=420, y=315)
	    my_canvas.image(path_april_4, center= True, x=-420, y=315)
	    my_canvas.show()
	    no_key_pressed = True 
	    while no_key_pressed: #wait till key pressed
	        
	        key, responce_time = kb.get_key() 
	        start()
	        if key != None:
	            var.Resp_time = responce_time
	            var.Resp= key
	            log.write_vars()
	            no_key_pressed = False
	            break 
	__end__
	set _prepare ""

define loop new_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run ""

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define inline_script tracker_init
	set description "Executes Python code"
	___run__
	# # star recording 
	# recording_id = device.recording_start()
	# print(f"Started recording with id {recording_id}")
	__end__
	set _prepare ""

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run data_loader True
	run canvas_create True
	run key True

