---
API: 3
OpenSesame: 4.0.13
Platform: posix
---
set width 1024
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "/Users/nina/Desktop/PupilNeon/Opensesame/ai_experiment"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background "#3d3846"

define loop block_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run trial_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block_loop True

define inline_script canvas
	set description "Executes Python code"
	set _run ""
	___prepare__
	# Create a form
	form = Form(
	    cols=[1,4,4,1], rows=[1,4,1],
	    margins=(0,0,0,0), spacing=25
	)
	
	
	# im = im.resize((TARGET_WIDTH, TARGET_HEIGHT))
	
	
	# Create widjets
	buttonFake = Button(text='fake')
	buttonReal = Button(text='real')
	
	                        
	tag1 = ImageWidget(path=pool['tag25_09_00000.png'], adjust=True, frame=False)
	                   
	tag2 = ImageWidget(path=pool['tag25_09_00001.png'], adjust=True, frame=False)
	                   
	tag3 = ImageWidget(path=pool['tag25_09_00002.png'], adjust=True, frame=False)
	                   
	tag4 = ImageWidget(path=pool['tag25_09_00003.png'], adjust=True, frame=False)  
	
	             
	
	# Add the widgets to the form. The position in the form is indicated as a
	# (column, row) tuple.
	
	form.set_widget(tag1, (0, 0))
	form.set_widget(tag2, (3, 0))
	form.set_widget(tag3, (0, 2))
	form.set_widget(tag4, (3, 2))
	form.set_widget(buttonFake, (1,2))
	form.set_widget(buttonReal, (2,2))
	__end__

define inline_script canvas_create
	set description "Executes Python code"
	set _run ""
	___prepare__
	my_canvas = Canvas()
	__end__

define inline_script data_loader
	set description "Executes Python code"
	set _run ""
	___prepare__
	from os import listdir
	from os.path import join
	import random
	
	def get_path_to_folder(folder_name):
	    path = join(exp.experiment_path, folder_name)
	    return path
	    
	path_to_fake = get_path_to_folder("fake")
	path_to_real = get_path_to_folder("real")
	path_to_tags = get_path_to_folder("april_tag")
	
	fakeimage_list = [f for f in listdir(path_to_fake )] 
	[pool.add(join(path_to_fake, img)) for img in fakeimage_list]
	realimage_list = [f for f in listdir(path_to_real)] 
	[pool.add(join(path_to_real, img)) for img in realimage_list]
	tags_list = [f for f in listdir(path_to_tags)] 
	[pool.add(join(path_to_tags, img)) for img in tags_list]
	
	
	images_list = realimage_list + fakeimage_list
	random.shuffle(images_list)
	__end__

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run tracker_init True
	run instructions True
	run experiment_loop True

define loop experiment_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run block_sequence

define inline_script init_tracker
	set description "Executes Python code"
	___run__
	# star recording 
	recording_id = device.recording_start()
	print(f"Started recording with id {recording_id}")
	__end__
	___prepare__
	from pupil_labs.realtime_api.simple import Device
	import time
	
	
	ip = "172.20.10.3"
	device = Device(address=ip, port=8080)
	__end__

define sketchpad instructions
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=True text="You will see an image . <br />If you think image is AI generated - press z<br />If you think image is real - press m <br /><br /><br />Press 'spacebar' to continue<br />" x=0 y=0 z_index=0

define loop new_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run ""

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define inline_script run
	set description "Executes Python code"
	___run__
	import os
	import json
	import time
	
	kb = keyboard(keylist=['z', 'm'], timeout=20)
	
	def my_cleanup_function():
	    device.recording_stop_and_save()
	    print("Recording stopped and saved")
	    device.close()
	
	   # Save gaze_data_database
	    database_file_path = os.path.join("/Users/nina/Desktop/PupilNeon/Opensesame/ai_experiment", 'gaze_data_database.json')
	    with open(database_file_path, 'w') as file:
	        json.dump(gaze_data_database, file)
	        
	    print(f"Gaze data saved to: {database_file_path}")
	    print('Done!')
	
	
	gaze_data_database = {}
	while len(images_list)!=0:
	    image_name =  images_list.pop(0)
	    path = exp.pool[image_name]
	    print("path to images ", path)
	    my_canvas.image(path, center=True, scale = 0.8)
	    
	    path_april_1 = exp.pool['tag36_11_00000.png']
	    path_april_2 = exp.pool['tag36_11_00001.png']
	    path_april_3 = exp.pool['tag36_11_00002.png']
	    path_april_4 = exp.pool['tag36_11_00003.png']
	
	# Function interface
	    my_canvas.image(path_april_1, center= True, x=-420, y=-315, scale=15)
	    my_canvas.image(path_april_2, center= True, x=420, y=-315, scale=15)
	    my_canvas.image(path_april_3, center= True, x=420, y=315, scale=15)
	    my_canvas.image(path_april_4, center= True, x=-420, y=315, scale=15)
	    
	    my_canvas.show()
	    t0 = clock.time() 
	    print(device.send_event("event", event_timestamp_unix_ns=t0))
	    var.image_appears = t0
	    no_key_pressed = True 
	    while no_key_pressed: #wait till key pressed
	        key, responce_time = kb.get_key() 
	        gaze_data = device.receive_gaze_datum() 
	        if image_name in gaze_data_database:
	            gaze_data_database[image_name]+= [gaze_data]
	        else:
	            gaze_data_database[image_name] = [gaze_data]
	            
	        if key != None:
	            var.Resp_time = responce_time
	            var.Resp= key
	            log.write_vars()
	            no_key_pressed = False
	            break 
	            
	    
	 
	exp.cleanup_functions.append(my_cleanup_function())
	__end__
	set _prepare ""

define inline_script tracker_init
	set description "Executes Python code"
	___run__
	# star recording 
	recording_id = device.recording_start()
	print(f"Started recording with id {recording_id}")
	__end__
	___prepare__
	# from pupil_labs.realtime_api.simple import Device
	
	
	ip = "172.20.10.3"
	device = Device(address=ip, port=8080)
	__end__

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run data_loader True
	run canvas_create True
	run run True

